OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  Classifier outputs 2 values at onece (here we set Time signal chunk to 2).

  We want to select only one: Matrix transpopse + Select channel

  Also classifier output is of type "StreamedMatrix".

  Change openvibe config: edit C:\Program Files\openvibe-3.2.0-64bit\share\openvibe\applications\designer.conf
  set: Designer_AllowUpCastConnection = true

Time signal
  Sampling frequency = 128
  Generated epoch sample count = 2
-> Simple DSP "sineWaveclassifier output"
  Equation = sin(x)
-> Matrix Transpose => #2
-> Channel Selector "1" => #3
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#2 -> Threshold Crossing Detector => #4
  Threshold = 0
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
Input signal=#3, Input stimulations=#4 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = Markers
#4 -> Stimulation listener
  Log level to use = Information
